# vmteach optogenetic virtual microscope
#py pyDevice,Camera,vmteach.devices.camera,SimCameraDevice
#py pyDevice,XYStage,vmteach.devices.stage,SimStageDevice
#py pyDevice,ZStage,vmteach.devices.z_stage,SimZStageDevice
#py pyDevice,LED,vmteach.devices.state,LEDDevice
#py pyDevice,Filter Wheel,vmteach.devices.state,FilterWheelDevice
#py pyDevice,Shutter,vmteach.devices.shutter,SimShutterDevice
#py pyDevice,Objective,vmteach.devices.state,ObjectiveDevice
#py pyDevice,SLM,vmteach.devices.slm,SimSLMDevice

#py Property,Core,Camera,Camera
#py Property,Core,XYStage,XYStage
#py Property,Core,Focus,ZStage
#py Property,Core,Shutter,Shutter
#py Property,Core,SLM,SLM

#py Property,Core,Initialize,1

# Channels: light source + emission filter
#py ConfigGroup,Channel,phase-contrast,LED,Label,CYAN
#py ConfigGroup,Channel,phase-contrast,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,Channel,DAPI,LED,Label,UV
#py ConfigGroup,Channel,DAPI,Filter Wheel,Label,SCFP2(434/474)
#py ConfigGroup,Channel,membrane,LED,Label,ORANGE
#py ConfigGroup,Channel,membrane,Filter Wheel,Label,mScarlet3(569/582)
#py ConfigGroup,Channel,CyanStim,LED,Label,BLUE
#py ConfigGroup,Channel,CyanStim,Filter Wheel,Label,TagGFP2(483/506)

# Pixel size calibration per objective (camera pixel, unbinned; the core
# multiplies by the camera binning). Same numbers as vmteach.sim.OBJECTIVES.
#py ConfigPixelSize,Res4x,Objective,Label,4x
#py PixelSize_um,Res4x,2.5
#py PixelSizeAffine,Res4x,2.5,0,0,0,2.5,0
#py ConfigPixelSize,Res10x,Objective,Label,10x
#py PixelSize_um,Res10x,1.0
#py PixelSizeAffine,Res10x,1.0,0,0,0,1.0,0
#py ConfigPixelSize,Res20x,Objective,Label,20x
#py PixelSize_um,Res20x,0.5
#py PixelSizeAffine,Res20x,0.5,0,0,0,0.5,0
#py ConfigPixelSize,Res40x,Objective,Label,40x
#py PixelSize_um,Res40x,0.25
#py PixelSizeAffine,Res40x,0.25,0,0,0,0.25,0
#py ConfigPixelSize,Res60x,Objective,Label,60x
#py PixelSize_um,Res60x,0.1667
#py PixelSizeAffine,Res60x,0.1667,0,0,0,0.1667,0

# Startup state: 10x objective, phase-contrast, no binning
#py ConfigGroup,System,Startup,Objective,Label,10x
#py ConfigGroup,System,Startup,LED,Label,CYAN
#py ConfigGroup,System,Startup,Filter Wheel,Label,Electra1(402/454)
#py ConfigGroup,System,Startup,Camera,Binning,1
